PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = change-localization
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Routines
  Routine instructions
    TextComponent text
      durationEstim = 10
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a game used to study memory.

        In each trial, you will see a random set of five colored squares for a brief moment; then the squares will disappear.

        After a short delay, the squares will reappear, but one of the squares will have a different color than before.

        Please use your mouse to click on the square that changed color. The squares will remain on the screen until you click on a square.

        Also, please try to look at the center of the screen throughout the experiment.

        First you will do some practice trials. At the end of each practice trial, the correct square will be colored white.

        Press c when you are ready to begin.
    KeyboardComponent key_resp
      allowedKeys = 'c'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
  Routine array
    PolygonComponent fixA
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent stim1
      durationEstim = .5
      fillColor [set every repeat] = $stim_color1
      lineColor [set every repeat] = $stim_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
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    PolygonComponent stim2
      durationEstim = 1
      fillColor [set every repeat] = $stim_color2
      lineColor [set every repeat] = $stim_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
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    PolygonComponent stim3
      durationEstim = 1
      fillColor [set every repeat] = $stim_color3
      lineColor [set every repeat] = $stim_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
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    PolygonComponent stim4
      durationEstim = 1
      fillColor [set every repeat] = $stim_color4
      lineColor [set every repeat] = $stim_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
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    PolygonComponent stim5
      durationEstim = 1
      fillColor [set every repeat] = $stim_color5
      lineColor [set every repeat] = $stim_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
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  Routine probe
    PolygonComponent fixB
      disabled = True
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    MouseComponent mouse
      clickable = probe1,probe2,probe3,probe4,probe5
      durationEstim = 2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = 1
      syncScreenRefresh = True
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    PolygonComponent probe1
      durationEstim = 2
      fillColor [set every repeat] = $probe_color1
      lineColor [set every repeat] = $probe_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
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    PolygonComponent probe2
      durationEstim = 2
      fillColor [set every repeat] = $probe_color2
      lineColor [set every repeat] = $probe_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
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    PolygonComponent probe3
      durationEstim = 2
      fillColor [set every repeat] = $probe_color3
      lineColor [set every repeat] = $probe_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
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    PolygonComponent probe4
      durationEstim = 2
      fillColor [set every repeat] = $probe_color4
      lineColor [set every repeat] = $probe_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
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    PolygonComponent probe5
      durationEstim = 2
      fillColor [set every repeat] = $probe_color5
      lineColor [set every repeat] = $probe_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
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    CodeComponent trial_code
      Code Type = Auto->JS
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  Routine feedback
    PolygonComponent probe1_copy
      durationEstim = 1
      fillColor [set every repeat] = $probe_color1
      lineColor [set every repeat] = $probe_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe2_copy
      durationEstim = .5
      fillColor [set every repeat] = $probe_color2
      lineColor [set every repeat] = $probe_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe3_copy
      durationEstim = 1
      fillColor [set every repeat] = $probe_color3
      lineColor [set every repeat] = $probe_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe4_copy
      durationEstim = 1
      fillColor [set every repeat] = $probe_color4
      lineColor [set every repeat] = $probe_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe5_copy
      durationEstim = 1
      fillColor [set every repeat] = $probe_color5
      lineColor [set every repeat] = $probe_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent click_copy
      fillColor = white
      pos [set every repeat] = click_pos
      shape = star
      size = (.025, .025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine train_feedback
    PolygonComponent probe1_train
      durationEstim = 1
      fillColor [set every repeat] = $copy_color1
      lineColor [set every repeat] = $copy_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe2_train
      durationEstim = .5
      fillColor [set every repeat] = $copy_color2
      lineColor [set every repeat] = $copy_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe3_train
      durationEstim = 1
      fillColor [set every repeat] = $copy_color3
      lineColor [set every repeat] = $copy_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe4_train
      durationEstim = 1
      fillColor [set every repeat] = $copy_color4
      lineColor [set every repeat] = $copy_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe5_train
      durationEstim = 1
      fillColor [set every repeat] = $copy_color5
      lineColor [set every repeat] = $copy_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent click_train
      fillColor = white
      pos [set every repeat] = click_pos
      shape = star
      size = (.025, .025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine break_2
  Routine rest
    TextComponent rest_text
      durationEstim = 10
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Ok, next you will begin the actual task.

        Remember to look at the center of the screen throughout.

        And of course, please try your best!

        Press c when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'c'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine completion
    TextComponent completion_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $completion_msg
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    CodeComponent code_code
      Code Type = JS
      Begin JS Experiment:
        code = Math.round(Math.random() * 10000);
        completion_msg = "Your completion code is:\n\n" + code.toString() + "\n\nPlease write down this code and then press c to exit this study."
    KeyboardComponent completion_keys
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = training.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('answer', 'probe3'), ('height', 0.05), ('width', 0.05), ('x1', -0.2), ('y1', 0.0), ('stim_color1', '#e69f00'), ('probe_color1', '#e69f00'), ('copy_color1', '#e69f00'), ('x2', 0.0), ('y2', -0.2), ('stim_color2', '#56b4e9'), ('probe_color2', '#56b4e9'), ('copy_color2', '#56b4e9'), ('x3', 0.2), ('y3', 0.1), ('stim_color3', '#d55e00'), ('probe_color3', '#009e73'), ('copy_color3', '#FFFFFF'), ('x4', 0.0), ('y4', 0.1), ('stim_color4', '#f0e442'), ('probe_color4', '#f0e442'), ('copy_color4', '#f0e442'), ('x5', -0.2), ('y5', -0.2), ('stim_color5', '#cc79a7'), ('probe_color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,
      OrderedDict([('trial', 2), ('answer', 'probe1'), ('height', 0.05), ('width', 0.05), ('x1', -0.2), ('y1', -0.2), ('stim_color1', '#000000'), ('probe_color1', '#009e73'), ('copy_color1', '#FFFFFF'), ('x2', -0.1), ('y2', -0.1), ('stim_color2', '#f0e442'), ('probe_color2', '#f0e442'), ('copy_color2', '#f0e442'), ('x3', 0.1), ('y3', 0.1), ('stim_color3', '#d55e00'), ('probe_color3', '#d55e00'), ('copy_color3', '#d55e00'), ('x4', 0.0), ('y4', 0.2), ('stim_color4', '#e69f00'), ('probe_color4', '#e69f00'), ('copy_color4', '#e69f00'), ('x5', 0.2), ('y5', 0.0), ('stim_color5', '#0072b2'), ('probe_color5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,
      OrderedDict([('trial', 3), ('answer', 'probe2'), ('height', 0.05), ('width', 0.05), ('x1', 0.1), ('y1', -0.2), ('stim_color1', '#f0e442'), ('probe_color1', '#f0e442'), ('copy_color1', '#f0e442'), ('x2', 0.1), ('y2', 0.1), ('stim_color2', '#56b4e9'), ('probe_color2', '#e69f00'), ('copy_color2', '#FFFFFF'), ('x3', 0.1), ('y3', -0.1), ('stim_color3', '#d55e00'), ('probe_color3', '#d55e00'), ('copy_color3', '#d55e00'), ('x4', 0.2), ('y4', 0.2), ('stim_color4', '#009e73'), ('probe_color4', '#009e73'), ('copy_color4', '#009e73'), ('x5', -0.1), ('y5', 0.0), ('stim_color5', '#0072b2'), ('probe_color5'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,
      OrderedDict([('trial', 4), ('answer', 'probe1'), ('height', 0.05), ('width', 0.05), ('x1', -0.1), ('y1', 0.2), ('stim_color1', '#d55e00'), ('probe_color1', '#0072b2'), ('copy_color1', '#FFFFFF'), ('x2', 0.1), ('y2', 0.1), ('stim_color2', '#009e73'), ('probe_color2', '#009e73'), ('copy_color2', '#009e73'), ('x3', -0.1), ('y3', 0.0), ('stim_color3', '#e69f00'), ('probe_color3', '#e69f00'), ('copy_color3', '#e69f00'), ('x4', 0.2), ('y4', -0.2), ('stim_color4', '#000000'), ('probe_color4', '#000000'), ('copy_color4', '#000000'), ('x5', -0.2), ('y5', 0.2), ('stim_color5', '#f0e442'), ('probe_color5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
    Routine array
    Routine probe
    Routine train_feedback
  LoopTerminator training
  Routine rest
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('answer', 'probe2'), ('height', 0.05), ('width', 0.05), ('x1', 0.2), ('y1', -0.1), ('stim_color1', '#f0e442'), ('probe_color1', '#f0e442'), ('x2', 0.1), ('y2', 0.2), ('stim_color2', '#0072b2'), ('probe_color2', '#56b4e9'), ('x3', 0.1), ('y3', 0.0), ('stim_color3', '#cc79a7'), ('probe_color3', '#cc79a7'), ('x4', 0.2), ('y4', 0.0), ('stim_color4', '#e69f00'), ('probe_color4', '#e69f00'), ('x5', 0.0), ('y5', 0.1), ('stim_color5', '#000000'), ('probe_color5', '#000000')]),
      OrderedDict([('trial', 2), ('answer', 'probe1'), ('height', 0.05), ('width', 0.05), ('x1', -0.1), ('y1', 0.1), ('stim_color1', '#009e73'), ('probe_color1', '#56b4e9'), ('x2', 0.1), ('y2', -0.1), ('stim_color2', '#e69f00'), ('probe_color2', '#e69f00'), ('x3', -0.2), ('y3', 0.1), ('stim_color3', '#0072b2'), ('probe_color3', '#0072b2'), ('x4', -0.2), ('y4', -0.2), ('stim_color4', '#cc79a7'), ('probe_color4', '#cc79a7'), ('x5', 0.2), ('y5', 0.0), ('stim_color5', '#000000'), ('probe_color5', '#000000')]),
      OrderedDict([('trial', 3), ('answer', 'probe5'), ('height', 0.05), ('width', 0.05), ('x1', -0.1), ('y1', 0.2), ('stim_color1', '#d55e00'), ('probe_color1', '#d55e00'), ('x2', 0.1), ('y2', -0.2), ('stim_color2', '#f0e442'), ('probe_color2', '#f0e442'), ('x3', 0.2), ('y3', 0.0), ('stim_color3', '#009e73'), ('probe_color3', '#009e73'), ('x4', -0.1), ('y4', -0.2), ('stim_color4', '#0072b2'), ('probe_color4', '#0072b2'), ('x5', 0.2), ('y5', -0.2), ('stim_color5', '#000000'), ('probe_color5', '#56b4e9')]),
      OrderedDict([('trial', 4), ('answer', 'probe3'), ('height', 0.05), ('width', 0.05), ('x1', 0.1), ('y1', 0.2), ('stim_color1', '#cc79a7'), ('probe_color1', '#cc79a7'), ('x2', 0.0), ('y2', 0.2), ('stim_color2', '#d55e00'), ('probe_color2', '#d55e00'), ('x3', -0.1), ('y3', 0.2), ('stim_color3', '#e69f00'), ('probe_color3', '#0072b2'), ('x4', 0.2), ('y4', -0.1), ('stim_color4', '#009e73'), ('probe_color4', '#009e73'), ('x5', 0.2), ('y5', -0.2), ('stim_color5', '#f0e442'), ('probe_color5', '#f0e442')])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
    Routine array
    Routine probe
    Routine feedback
  LoopTerminator trials
  Routine completion
